PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = 186c experiment
  keyboardBackend = ioHub
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Routines
  Routine intro
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        This experiment will require you to have headphones, so please have them on.

        You will first have a few survey questions to answer. Please answer to the best of your ability!

        When you are ready, press "space".
    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine presurvey_questions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please answer the following presurvey questions!
    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = 186c experiment survey form.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 1)
      startVal [time (s)] = 0.0
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    ButtonComponent button_survey
      bold = True
      fillColor = blue
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.45)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Done!
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  Routine training
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    TextComponent training_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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  Routine trial
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  Routine conclusion
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  Routine training_instr
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    TextComponent training_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the first part, you will be listening to audio clips of an unspecified language. These audios will consist of short conversational phrases.

        Make sure to pay attention!

        Press "space" to start.
    KeyboardComponent training_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_instr
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    TextComponent trial_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For the second part, you will be listening to more audio clips.

        However, these audio clips will be muffled, and your task will be to identify if the played clip is the same language you heard in the last part.

        You will first be given a few sample clips to practice with.

        Press "space" to begin.
    KeyboardComponent trial_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sample_trial
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  Routine trial_instr_2
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    TextComponent trial_start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine intro
  Routine presurvey_questions
  Routine training_instr
  LoopInitiator training_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine training
  LoopTerminator training_loop
  Routine trial_instr
  LoopInitiator sample_trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine sample_trial
  LoopTerminator sample_trials
  Routine trial_instr_2
  LoopInitiator trial_loop loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trial_loop
  Routine conclusion
